CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Plate>[^\\/]+)[\\/](?P<Well>[A-Za-z][0-9]{3}[A-Za-z])
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_c0000")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c0001")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c0002")
    Name to assign these images:TPM_allele
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c0003")
    Name to assign these images:WT_allele
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

RunCellpose:[module_num:5|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
    Select the input image:phase
    Expected object diameter:30
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:nucleus
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.2
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:TPM_allele, WT_allele, phase
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:8|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
    Select images to measure:TPM_allele, WT_allele, phase
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:TPM_allele, WT_allele, phase
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToDatabase:[module_num:10|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Elsewhere...|E:\\PhaseWholeCell_Cellprofiler\\Analysis
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:TPM_allele,WT_allele,nucleus,phase
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
    Select the plate metadata:Well
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\PhaseWholeCell_Cellprofiler\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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